//genesis
// kkit Version 11 flat dumpfile
 
// Saved on Sat Oct 18 20:57:38 2025
 
include kkit {argv 1}
 
FASTDT = 0.001
SIMDT = 0.001
CONTROLDT = 0.1
PLOTDT = 0.1
MAXTIME = 100
TRANSIENT_TIME = 2
VARIABLE_DT_FLAG = 0
DEFAULT_VOL = 3.1e-18
VERSION = 11.0
setfield /file/modpath value ~/scripts/modules
kparms
 
//genesis

initdump -version 3 -ignoreorphans 1
simobjdump doqcsinfo filename accessname accesstype transcriber developer \
  citation species tissue cellcompartment methodology sources \
  model_implementation model_validation x y z
simobjdump table input output alloced step_mode stepsize x y z
simobjdump xtree path script namemode sizescale
simobjdump xcoredraw xmin xmax ymin ymax
simobjdump xtext editable
simobjdump xgraph xmin xmax ymin ymax overlay
simobjdump xplot pixflags script fg ysquish do_slope wy
simobjdump group xtree_fg_req xtree_textfg_req plotfield expanded movealone \
  link savename file version md5sum mod_save_flag x y z
simobjdump geometry size dim shape outside xtree_fg_req xtree_textfg_req x y \
  z
simobjdump kpool DiffConst CoInit Co n nInit mwt nMin vol slave_enable \
  geomname xtree_fg_req xtree_textfg_req x y z
simobjdump kreac kf kb notes xtree_fg_req xtree_textfg_req x y z
simobjdump kenz CoComplexInit CoComplex nComplexInit nComplex vol k1 k2 k3 \
  keepconc usecomplex notes xtree_fg_req xtree_textfg_req link x y z
simobjdump stim level1 width1 delay1 level2 width2 delay2 baselevel trig_time \
  trig_mode notes xtree_fg_req xtree_textfg_req is_running x y z
simobjdump xtab input output alloced step_mode stepsize notes editfunc \
  xtree_fg_req xtree_textfg_req baselevel last_x last_y is_running x y z
simobjdump kchan perm gmax Vm is_active use_nernst notes xtree_fg_req \
  xtree_textfg_req x y z
simobjdump transport input output alloced step_mode stepsize dt delay clock \
  kf xtree_fg_req xtree_textfg_req x y z
simobjdump proto x y z
simobjdump text str
simundump geometry /kinetics/geometry 0 3.1115e-18 3 sphere "" white black 0 \
  0 0
simundump geometry /kinetics/geometry[1] 0 1e-19 3 sphere "" white black 0 0 \
  0
simundump geometry /kinetics/geometry[2] 0 1e-20 3 sphere "" white black 0 0 \
  0
simundump text /kinetics/notes 0 ""
call /kinetics/notes LOAD \
""
simundump group /kinetics/DEND 0 blue green x 0 0 "" DEND defaultfile.g 0 0 0 \
  1 2 0
simundump text /kinetics/DEND/notes 0 Compartment
call /kinetics/DEND/notes LOAD \
"Compartment"
simundump kpool /kinetics/DEND/Ca 0 2e-11 0.079999 0.079999 149.35 149.35 0 0 \
  1866.9 0 /kinetics/geometry 1 blue 5 2 0
simundump text /kinetics/DEND/Ca/notes 0 ""
call /kinetics/DEND/Ca/notes LOAD \
""
simundump group /kinetics/SPINE 0 4 black x 0 0 "" SPINE defaultfile.g 0 0 0 \
  1 5 0
simundump text /kinetics/SPINE/notes 0 Compartment
call /kinetics/SPINE/notes LOAD \
"Compartment"
simundump kpool /kinetics/SPINE/Ca 0 2e-11 0.08 0.08 4.8 4.8 0 0 60 0 \
  /kinetics/geometry[1] 25 4 5 5 0
simundump text /kinetics/SPINE/Ca/notes 0 ""
call /kinetics/SPINE/Ca/notes LOAD \
""
simundump group /kinetics/PSD 0 61 black x 0 0 "" PSD defaultfile.g 0 0 0 1 9 \
  0
simundump text /kinetics/PSD/notes 0 Compartment
call /kinetics/PSD/notes LOAD \
"Compartment"
simundump kpool /kinetics/PSD/Ca 0 2e-11 0.08 0.08 0.48 0.48 0 0 6 0 \
  /kinetics/geometry[2] 47 black 5 9 0
simundump text /kinetics/PSD/Ca/notes 0 ""
call /kinetics/PSD/Ca/notes LOAD \
""
simundump text /kinetics/geometry/notes 0 ""
call /kinetics/geometry/notes LOAD \
""
simundump text /kinetics/geometry[1]/notes 0 ""
call /kinetics/geometry[1]/notes LOAD \
""
simundump text /kinetics/geometry[2]/notes 0 ""
call /kinetics/geometry[2]/notes LOAD \
""
simundump xgraph /graphs/conc1 0 0 100 0.001 0.999 0
simundump xgraph /graphs/conc2 0 0 100 0 1 0
simundump xplot /graphs/conc1/CaCyt.Co 3 524288 \
  "delete_plot.w <s> <d>; edit_plot.D <w>" 23 0 0 1
simundump xgraph /moregraphs/conc3 0 0 100 0 1 0
simundump xgraph /moregraphs/conc4 0 0 100 0 1 0
simundump xcoredraw /edit/draw 0 -2 7 -2 11
simundump xtree /edit/draw/tree 0 \
  /kinetics/#[],/kinetics/#[]/#[],/kinetics/#[]/#[]/#[][TYPE!=proto],/kinetics/#[]/#[]/#[][TYPE!=linkinfo]/##[] \
  "edit_elm.D <v>; drag_from_edit.w <d> <S> <x> <y> <z>" auto 0.6
simundump xtext /file/notes 0 1
addmsg /kinetics/DEND/Ca /graphs/conc1/CaCyt.Co PLOT Co *CaCyt.Co *23 
enddump
// End of dump

call /kinetics/DEND/notes LOAD \
"Compartment"
call /kinetics/SPINE/notes LOAD \
"Compartment"
call /kinetics/PSD/notes LOAD \
"Compartment"
complete_loading
